Dialog.create("Analysis Mode");
	Dialog.addMessage("How would you like to continue?")
	arr0 = newArray("Batch Mode", "Single Image Pair Mode");
	Dialog.addChoice("Mode: ", arr0);
	Dialog.show();
	a = Dialog.getChoice();

	if (a == "Batch Mode"){
		Batch();
	} else {
		Single();
	}

function Batch () {

macro "Batch Analysis" {

print("Program 1 starting...");

// Image source directory
dir1 = getDirectory("Choose Source Directory");

// Retrieves all images in source directory and puts them within a list
imgList = getFileList(dir1);

// Checks that there are an even number of files, ensuring there all images are paired, within the source directory, otherwise the program halts
if (imgList.length % 2 == 0){
	print("correct number of files");
} else {
	exit("Terminated: Source directory must contain an even number of files");
}

// Output image directory
dir2 = getDirectory("Choose Image Destination Directory");

// Checks if the user selects the same directory as the image source directory and output image directory, if so, allows the user to halt or continue the program
if (dir2 == dir1){
	Dialog.create("Warning");
	Dialog.addMessage("The image destination directory is the same as image source directy");
	arr0 = newArray("yes, continue", "no, halt the program");
	Dialog.addChoice("Would you still like to continue?", arr0);
	Dialog.show();
	a = Dialog.getChoice();

	if (a == "no, halt the program"){
		print("program halted");
		exit();
	}
}

// Output text file directory
dir3 = getDirectory("Choose Text File Destination Directory");

// Checks if the user selects the same directory as the image source directory and output text file directory, if so, allows the user to halt or continue the program
if (dir3 == dir1){
	Dialog.create("Warning");
	Dialog.addMessage("The text file destination directory is the same as image source directy);
	arr0 = newArray("yes, continue", "no, halt the program");
	Dialog.addChoice("Would you like to continue?", arr0);
	Dialog.show();
	a = Dialog.getChoice();

	if (a == "no, halt the program"){
		print("program halted");
		exit();
	}
}

// Setting initial values for the parameters
p = "0.1606";
po = "0.45";
y = "15000";
r = "0.000000001";
	
noise = ".2";
thres = "5";

// Opens the first image and runs a calculation to determine the interrogation window size
open(dir1+imgList[0]);
fpiv = calcpiv(getWidth(),getHeight());
close();

//Takes the calculated interrogation window size from above and puts it into arrays for selection during the analysis setup
arr1 = newArray(fpiv,(fpiv*2),(fpiv/2)); 
arr2 = newArray((fpiv/2),fpiv,(fpiv/4), "0");
arr3 = newArray((fpiv/4),(fpiv/2),(fpiv/8), "0");
	
arr4 = newArray(fpiv*2, fpiv);
arr5 = newArray(fpiv,(fpiv/2));
arr6 = newArray((fpiv/2), (fpiv/4));

arr7 = newArray("No alignment", "Full image alignment", "Edge alignment");

// Creates and sets up dialog box for the analysis setup
Dialog.create("Analysis Setup");
Dialog.addMessage("PIV Parameters",16);
Dialog.addMessage("PIV 1");
Dialog.addChoice("1st Interrogation Window:  ", arr1);
Dialog.addChoice("Search Window Size: ", arr4);
Dialog.addMessage(" ");
Dialog.addMessage("PIV 2");
Dialog.addChoice("2st Interrogation Window: ", arr2);
Dialog.addChoice("Search Window Size: ", arr5);
Dialog.addMessage("");
Dialog.addMessage("PIV 3");
Dialog.addChoice("3rd Interrogation Window: ", arr3);
Dialog.addChoice("Search Window Size: ", arr6);
Dialog.addMessage("");
Dialog.addNumber("Noise: ", noise);
Dialog.addNumber("Threshold: ",thres);
Dialog.addMessage("__________________________");
Dialog.addMessage("FTTC Parameters",16);
Dialog.addNumber("Pixel size (" + fromCharCode(181) + "m)",p,5,5,"");
Dialog.addNumber("Poisson's Ratio: ", po);
Dialog.addNumber("Young's Modulus", y);
Dialog.addNumber("Regularization Factor", r,10,11,"");
Dialog.addMessage("__________________________");
Dialog.addChoice("Alignment option: ", arr7);
Dialog.show();

// Retrieves the user input from the dialog box and saves them to new variables
p1 = Dialog.getChoice();
sw1 = Dialog.getChoice();
p2 = Dialog.getChoice();
sw2 = Dialog.getChoice();
p3 = Dialog.getChoice();
sw3 = Dialog.getChoice();
noise = Dialog.getNumber();
thres = Dialog.getNumber();
p = Dialog.getNumber();
po = Dialog.getNumber();
y = Dialog.getNumber();
r = Dialog.getNumber();
aln = Dialog.getChoice();

// Enables ImageJ's batchmode
setBatchMode(true);

// Loop that runs through all the images in the image source directory
for (i=0; i<imgList.length; i=i+2) {
	
	// Opens first file and cuts the name to exclude the file extension 
	open(dir1+imgList[i]);
	img1Title = substring(getTitle,0,lengthOf(getTitle)-4); 
	
	// Makes the image square and converts to 16-bit
	convert();
	
	// Opens second and converts the image
	open(dir1+imgList[i+1]);
	convert();
	
	// Turns the images into a stack, which is required for the PIV calculations
	run("Images to Stack", "name=&img1Title");
	
	// Reverses the images so they are in the correct order 
	run("Reverse");

	a = getWidth();

	if (aln == "No alignment") {
		print(aln);
	} 
	if (aln == "Full image alignment"){
		run("Align slices in stack...", "method=5 windowsizex="+a+" windowsizey="+a+" x0=0 y0=0 swindow=0 subpixel=false itpmethod=0 ref.slice=1 show=true");
	}
	if (aln == "Edge alignment"){
		run("Align slices in stack...", "method=5 windowsizex="+floor(a/5)+" windowsizey="+a+" x0=0 y0=0 swindow=0 subpixel=false itpmethod=0 ref.slice=1 show=true");
	}

	//run("Align slices in stack...", "method=5 windowsizex=300 windowsizey=300 x0=5 y0=5 swindow=0 subpixel=false itpmethod=0 ref.slice=1 show=true");
	// FIX: windowsizex & y input is not accepting int variables, only int
	// NOTE: If alligning slices where displacement is tracked, there are potential conflicts that could lead to unwanted errors 
	
	// Sets the file name and location for the PIV calculations
	file_loc = dir3+"PIV_"+img1Title+".txt";
	
	print("Image analysis set up complete...");

	// Computes particle image velocimetry on a pair of images
	run("iterative PIV(Basic)...", "piv1=&p1 sw1=&sw1 piv2=&p2 sw2=&sw2 piv3=&p3 sw3=&sw3 what=[Accept this PIV and output] noise=&noise threshold=&thres c1=3 c2=1 save=&file_loc");
	print("PIV calculation "+(i/2+1)+" completed...");

	// Sets the file name and location for the FTTC calculations
	FTTC_path = dir3+"PIV_"+img1Title+".txt";

	// Computers the fourier transform traction cytometry based on the text output file from the iterative PIV calculations
	run("FTTC ", "pixel=&p poisson=&po young's=&y regularization=&r plot plot=1000 plot=1000 select=&FTTC_path");
	print("FTTC calculation "+(i/2+1) + " completed...");

	// Names, saves, and closes all of the outputed files
	saveAs("Jpeg",dir2+img1Title+"_Traction Magnitude_B&W");
	close();
	saveAs("Jpeg", dir2+img1Title+"_TFM Scale Bar");
	close();
	saveAs("Jpeg",dir2+img1Title+"_Traction Magnitude Forces");
	close();
	saveAs("Jpeg",dir2+img1Title+"_PIV Scale Bar");
	close();
	
	// Determines how many iterations of the PIV were ran to know how many images there are to save
	if ((p2 != 0) & (p3 == 0))  {
		saveAs("Jpeg", dir2+img1Title+"_PIV2");
		close();
		saveAs("Jpeg", dir2+img1Title+"_PIV1");
		close();
	}	
	
	// Determines how many iterations of the PIV were ran to know how many images there are to save
	if (((p2 ==0) & (p3 == 0)) |  ((p2 == 0) & (p3 != 0))) {
		saveAs("Jpeg", dir2+img1Title+"_PIV1");
		close();
	} 

	// Determines how many iterations of the PIV were ran to know how many images there are to save
	if ((p2 !=0) & (p3 != 0)){
		saveAs("Jpeg", dir2+img1Title+"_PIV3");
		close();
		saveAs("Jpeg", dir2+img1Title+"_PIV2");
		close();
		saveAs("Jpeg", dir2+img1Title+"_PIV1");
		close();
	}
	close("*");	
}

setBatchMode(false); 

print("<> <> <> <> <> Program Completed <> <> <> <> <>");
}
}

/**

Function for analyzing a single image pair below

**/

function Single(){

print("Program 2 starting...");

file1 = File.openDialog("Select first image");
open(file1);

fpiv = calcpiv(getWidth(),getHeight());

dir = getDirectory("image");
file2 = File.openDialog("Select second image");
open(file2);

list = getList("image.titles");

if (list.length>2) {
	exit("Too many images");
}

// Setting initial values for the parameters

p = "0.1606";
po = "0.45";
y = "15000";
r = "0.000000001";
p1 = "128";
p2 = "64";
p3 = "32";
noise = ".2";
thres = "5";
s_name = substring(getTitle,0,lengthOf(getTitle)-4);
print(s_name);

//Takes the calculated interrogation window size from above and puts it into arrays for selection during the analysis setup
arr1 = newArray(fpiv,(fpiv*2),(fpiv/2)); 
arr2 = newArray((fpiv/2),fpiv,(fpiv/4), "0");
arr3 = newArray((fpiv/4),(fpiv/2),(fpiv/8), "0");
	
arr4 = newArray(fpiv*2, fpiv);
arr5 = newArray(fpiv,(fpiv/2));
arr6 = newArray((fpiv/2), (fpiv/4));

arr7 = newArray("No alignment", "Full image alignment", "Edge image alignment");

// Creates and sets up dialog box for the analysis setup
Dialog.create("Analysis Setup");
Dialog.addMessage("PIV Parameters",16);
Dialog.addMessage("PIV 1");
Dialog.addChoice("1st Interrogation Window:  ", arr1);
Dialog.addChoice("Search Window Size: ", arr4);
Dialog.addMessage(" ");
Dialog.addMessage("PIV 2");
Dialog.addChoice("2st Interrogation Window: ", arr2);
Dialog.addChoice("Search Window Size: ", arr5);
Dialog.addMessage("");
Dialog.addMessage("PIV 3");
Dialog.addChoice("3rd Interrogation Window: ", arr3);
Dialog.addChoice("Search Window Size: ", arr6);
Dialog.addMessage("");
Dialog.addNumber("Noise: ", noise);
Dialog.addNumber("Threshold: ",thres);
Dialog.addMessage("__________________________");
Dialog.addMessage("FTTC Parameters",16);
Dialog.addNumber("Pixel size (" + fromCharCode(181) + "m)",p,5,5,"");
Dialog.addNumber("Poisson's Ratio: ", po);
Dialog.addNumber("Young's Modulus", y);
Dialog.addNumber("Regularization Factor", r,10,11,"");
Dialog.addMessage("__________________________");
Dialog.addChoice("Alignment option: ", arr7);
Dialog.show();

// Retrieves the user input from the dialog box and saves them to new variables
p1 = Dialog.getChoice();
sw1 = Dialog.getChoice();
p2 = Dialog.getChoice();
sw2 = Dialog.getChoice();
p3 = Dialog.getChoice();
sw3 = Dialog.getChoice();
noise = Dialog.getNumber();
thres = Dialog.getNumber();
p = Dialog.getNumber();
po = Dialog.getNumber();
y = Dialog.getNumber();
r = Dialog.getNumber();
aln = Dialog.getChoice();

list1 = getList("image.titles");

if (list1.length>2) {
	exit("Too many images");
}


for(i=0; i<list1.length; i++){

	selectWindow(list1[i]);
	run("16-bit");	

	if (getWidth==getHeight) {
	print(" ");
	} else { 
		if(getWidth>getHeight) {
			edge = getHeight;
			makeRectangle(0,0,edge,edge);
			run("Crop");
		} else  {
			edge = getWidth;
			makeRectangle(0,0,edge,edge);
			run("Crop");
	}
}
}
 
run("Images to Stack", "name=&s_name");

run("Reverse");

a = getWidth();

	if (aln == "No alignment") {
		print(aln);
	} 
	if (aln == "Full image alignment"){
		run("Align slices in stack...", "method=5 windowsizex="+a+" windowsizey="+a+" x0=0 y0=0 swindow=0 subpixel=false itpmethod=0 ref.slice=1 show=true");
	}
	if (aln == "Edge alignment"){
		run("Align slices in stack...", "method=5 windowsizex="+floor(a/5)+" windowsizey="+a+" x0=0 y0=0 swindow=0 subpixel=false itpmethod=0 ref.slice=1 show=true");
	}
	

name = getTitle;

file_loc = dir+"PIV_"+name+".txt";

run("iterative PIV(Basic)...", "piv1=&p1 sw1=&sw1 piv2=&p2 sw2=&sw2 piv3=&p3 sw3=&sw3 what=[Accept this PIV and output] noise=&noise threshold=&thres c1=3 c2=1 save=&file_loc");
FTTC_path = dir+"PIV_"+name+".txt";

run("FTTC ", "pixel=&p poisson=&po young's=&y regularization=&r plot plot=1000 plot=1000 select=&FTTC_path");

list2 = getList("image.titles");

for(i = 0; i<list2.length; i++){
	if (i == 0) {
		selectWindow(list2[i]);
		rename("Image Stack");
	}
	if (i==1) {	
		selectWindow(list2[i]);
		rename("PIV1");
	}
	if (i == 2) {
		selectWindow(list2[i]);
		rename("PIV2");
	}
	if (i==3) {	
		selectWindow(list2[i]);
		rename("PIV3");
	}
	if (i == 4) {
		selectWindow(list2[i]);
		rename("Scale Bar 1");
	}
	if (i==5) {	
		selectWindow(list2[i]);
		rename("Traction Magnitude Force");
	}
	if (i==6) {	
		selectWindow(list2[i]);
		rename("Scale Bar 2");
	}
	if (i==7) {	
		selectWindow(list2[i]);
		rename("Traction Magnitude Force_B&W");
	}
}


// Calculates the interrogation window based on image size

print("<> <> <> <> <> Program Completed <> <> <> <> <>");


}

/* 
Below are all functions used in the main loop of the program
*/

// Converts images to 16-bit and crops them
function convert(){                     
	run("16-bit");
	if(getWidth>getHeight) {
		edge = getHeight;
		makeRectangle(0,0,edge,edge);
		run("Crop");
	} else  {
		edge = getWidth;
		makeRectangle(0,0,edge,edge);
		run("Crop");
		}
}

// Calculates the interrogation window based on image size
function calcpiv(w,h){
	if (w>h) {
		val = h;
	} else {
		val =w;
	}
	x = 0;

	while ((val/4) > Math.pow(2,x)){
		x = x+1;
	}
	if ((val/4) == Math.pow(2,x)) {
		return Math.pow(2,x);
	} else {
		return Math.pow(2,(x-1));
	}
}



